// title: A computational model of the ionic currents, Ca2+ dynamics and action potentials underlying contraction of isolated uterine smooth muscle
// creator: Family Tong; Given Wing Chiu; winnie.tong@ncl.ac.uk; Orgname Newcastle University; Orgunit Institute of Cellular Medicine
// reference: #Subject_citation; Pubmed_id 21559514; #citation; title A computational model of the ionic currents, Ca2+ dynamics and action potentials underlying contraction of isolated uterine smooth muscle; #Authors; #Author_1; Family Tong; Given WC; #Author_2; Family Choi; Given C; Other Y; #Author_3; Family Kharche; Given S; #Author_4; Family Holden; Given A; Other V; #Author_5; Family Zhang; Given H; #Author_6; Family Taggart; Given M; Other J; volume 6; first_page e18685; #Journal; title PLoS One
// reference: #Subject_Model_keywords; #Model_keywords; #keywords; _1 electrophysiology; _2 excitation-contraction_coupling; _3 calcium; _4 force; _5 pregnancy; _6 uterus; _7 myometrium; _8 smooth muscle; subject_type keyword
def model Tong_Choi_Kharche_Holden_Zhang_Taggart_2011 as
  // units
  def unit msec as
    unit second {pref: milli};
  enddef;
  def unit joule_per_kelvin_per_kilomole as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1, pref: kilo};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit liter {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_msec as
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit M_per_msec as
    unit mole;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit uA_per_uF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit per_msec as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit uF_per_cm2 as
    unit farad {pref: micro};
    unit meter {expo: -2, pref: centi};
  enddef;
  def unit cm2_per_uL as
    unit meter {expo: 2, pref: centi};
    unit liter {expo: -1, pref: micro};
  enddef;
  def unit nS_per_pF as
    unit siemens {pref: nano};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit pA_per_pF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit nM as
    unit mole {pref: nano};
    unit liter {expo: -1};
  enddef;
  def unit uN as
    unit newton {pref: micro};
  enddef;
  def unit nM_to_mM as
    unit mM;
    unit nM {expo: -1};
  enddef;
  def unit mM_to_M as
    unit mole;
    unit mM {expo: -1};
  enddef;
  // Model - stimulation interface

  def comp interface as
    var I_hold: pA_per_pF {init: 0, pub: none};
    // below default
    var I_test: pA_per_pF {init: -0.5, pub: none};
    // below for test comparison Tong, 2014 Fig 8
    // var I_test: pA_per_pF {init: -0.2, pub: none};
    // below for test comparison Tong, 2014 Fig 11
    // var I_test: pA_per_pF {init: -0.9, pub: none};
    var test_start: msec {init: 1000, pub: none};
    // below default
    var test_end: msec {init: 3000, pub: none};
    // below for test comparison Tong, 2014 Fig 8
    // var test_end: msec {init: 50000, pub: none};
    // below for test comparison Tong, 2014 Fig 11
    // var test_end: msec {init: 10000, pub: none};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var Ist: pA_per_pF {priv: out};
    var time: msec {priv: in};
    Ist = sel
      case (time > test_start) and (time < test_end):
        I_test;
      otherwise:
        I_hold;
    endsel;
  enddef;
  def map between interface and environment for
    vars time and time;
  enddef;
  def map between interface and membrane_potential for
    vars Ist and Ist;
  enddef;
  // Model - Time variable

  def comp environment as
    var time: msec {pub: out};
  enddef;
  // Model - V variable

  def comp membrane_potential as
    var I_tot: pA_per_pF {pub: none};
    var I_Ca_tot: pA_per_pF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var v: mV {init: -53.90915441282156, pub: out};
    var Ist: pA_per_pF {pub: in};
    var time: msec {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var ina: pA_per_pF {pub: in};
    var ical: pA_per_pF {pub: in};
    var icat: pA_per_pF {pub: in};
    var ib: pA_per_pF {pub: in};
    var ik1: pA_per_pF {pub: in};
    // below without ik2
    // var ik2: pA_per_pF {pub: in};
    // below without ika
    // var ika: pA_per_pF {pub: in};
    var iBKa: pA_per_pF {pub: in};
    var iBKab: pA_per_pF {pub: in};
    // var ih: pA_per_pF {pub: in};
    var icl: pA_per_pF {pub: in};
    var insna: pA_per_pF {pub: in};
    var insca: pA_per_pF {pub: in};
    var insk: pA_per_pF {pub: in};
    // below without inak
    // var inak: pA_per_pF {pub: in};
    // below without ncx current
    // var inaca: pA_per_pF {pub: in};
    I_Ca_tot = ical+icat+insca;
    // below original total with all currents
    // I_tot = ina+ih+inaca+inak+ical+icat+icl+ik1+ik2+ika+iBKa+iBKab+insna+insk+insca+ib;
    // below without 'hyperpol' current ih
    // I_tot = ina+inaca+inak+ical+icat+icl+ik1+ik2+ika+iBKa+iBKab+insna+insk+insca+ib;
    // below without K2 current ik2
    // I_tot = ina+inaca+inak+ical+icat+icl+ik1+ika+iBKa+iBKab+insna+insk+insca+ib;
    // below without Ka current ika
    // I_tot = ina+inaca+inak+ical+icat+icl+ik1+iBKa+iBKab+insna+insk+insca+ib;
    // below without N/K current inak
    // I_tot = ina+inaca+ical+icat+icl+ik1+iBKa+iBKab+insna+insk+insca+ib;
    // below without NCX current inaca; note jnaca still computed...
    I_tot = ina+ical+icat+icl+ik1+iBKa+iBKab+insna+insk+insca+ib;
    ode(v, time) = -(I_tot+Ist);
  enddef;
  def map between membrane_potential and environment for
    vars time and time;
  enddef;
  def map between membrane_potential and parameters for
    vars Cm and Cm;
    vars v and v;
  enddef;
  // Model - Cai variable

  def comp Ca_Concentrations as
    var J_tot: mM_per_msec {pub: none};
    var J_Ca_mem: mM_per_msec {pub: none};
    var cai: mM {init: 0.0001161881607214449, pub: out};
    var time: msec {pub: in};
    var jnaca: mM_per_msec {pub: in};
    var jpmca: mM_per_msec {pub: in};
    var I_Ca_tot: pA_per_pF {pub: in};
    var buff: dimensionless {pub: in};
    var AV: cm2_per_uL {pub: in};
    var zca: dimensionless {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    J_Ca_mem = AV*Cm*buff/(zca*frdy)*I_Ca_tot;
    var jcamem_plot: M_per_msec {pub: none};
    var jpmca_plot: M_per_msec {pub: none};
    var jnaca_plot: M_per_msec {pub: none};
    var conversion: mM_to_M {init: 1000, pub: none};
    jcamem_plot = J_Ca_mem*conversion;
    jpmca_plot = jpmca*conversion;
    jnaca_plot = jnaca*conversion;
    J_tot = J_Ca_mem+jnaca+jpmca;
    ode(cai, time) = -J_tot;
  enddef;
  def map between Ca_Concentrations and environment for
    vars time and time;
  enddef;
  def map between Ca_Concentrations and membrane_potential for
    vars I_Ca_tot and I_Ca_tot;
  enddef;
  def map between Ca_Concentrations and parameters for
    vars cai and cai;
    vars buff and buff;
    vars AV and AV;
    vars zca and zca;
    vars frdy and frdy;
    vars Cm and Cm;
  enddef;
  // Model - Parameters

  def comp parameters as
    var ki: mM {pub: out};
    var nai: mM {pub: out};
    var cli: mM {pub: out};
    var ko: mM {pub: out};
    var cao: mM {pub: out};
    var nao: mM {pub: out};
    var clo: mM {pub: out};
    var mgo: mM {pub: out};
    var buff: dimensionless {pub: out};
    var AV: cm2_per_uL {pub: out};
    var zca: dimensionless {pub: out};
    var zna: dimensionless {pub: out};
    var zk: dimensionless {pub: out};
    var R: joule_per_kelvin_per_kilomole {pub: out};
    var frdy: coulomb_per_mole {pub: out};
    var temp: kelvin {pub: out};
    var Cm: uF_per_cm2 {pub: out};
    var gna: nS_per_pF {pub: out};
    var gcal: nS_per_pF {pub: out};
    var ecal: mV {pub: out};
    var kmca: mM {pub: out};
    var gcat: nS_per_pF {pub: out};
    var ecat: mV {pub: out};
    var gkca: nS_per_pF {pub: out};
    var gb: nS_per_pF {pub: out};
    var gk1: nS_per_pF {pub: out};
    // below removed for ik2
    // var gk2: nS_per_pF {pub: out};
    var gbka: dimensionless {pub: out};
    var gbkab: dimensionless {pub: out};
    // below removed for ika
    // var gka: nS_per_pF {pub: out};
    var gcl: nS_per_pF {pub: out};
    // below removed for ih
    // var gh: nS_per_pF {pub: out};
    var gns: nS_per_pF {pub: out};
    var PnsK: dimensionless {pub: out};
    var PnsNa: dimensionless {pub: out};
    var PnsCa: dimensionless {pub: out};
    var PnsCs: dimensionless {pub: out};
    var gnsCa: dimensionless {pub: out};
    var gnsNa: dimensionless {pub: out};
    var gnsK: dimensionless {pub: out};
    var gnsCs: dimensionless {pub: out};
    // below removed for inak
    var PK: dimensionless {pub: out};
    var PNa: dimensionless {pub: out};
    var Jpmca: mM_per_msec {pub: out};
    var Kmpmca: mM {pub: out};
    var npmca: dimensionless {pub: out};
    var Jnaca: mM_per_msec {pub: out};
    var Kmallo: mM {pub: out};
    var nallo: dimensionless {pub: out};
    var ksat: dimensionless {pub: out};
    var xgamma: dimensionless {pub: out};
    var Kmnai: mM {pub: out};
    var Kmcai: mM {pub: out};
    var Kmnao: mM {pub: out};
    var Kmcao: mM {pub: out};
    var Fmax: uN {pub: out};
    var FKm: nM {pub: out};
    var Fn: dimensionless {pub: out};
    ki = 140.0{mM};
    nai = 4.0{mM};
    cli = 46.0{mM};
    ko = 6.0{mM};
    cao = 2.5{mM};
    nao = 130.0{mM};
    clo = 130.0{mM};
    mgo = 0.5{mM};
    // below base value from cellml
    // buff = 0.015{dimensionless};
    // below value from spreadsheet test
    // 'Final parms gK 0.7 gNa 1.4x gCaL 1.0x with buff scaling 1.05x beta'
    // buff = 0.0158{dimensionless};
    // above 1.05x not enough Ca cyt
    // below try 1.1x beta
    // buff = 0.0165{dimensionless};
    // even higher to 1.125x beta
    buff = 0.0169{dimensionless};
    AV = 4.0{cm2_per_uL};
    zca = 2.0{dimensionless};
    zna = 1.0{dimensionless};
    zk = 1.0{dimensionless};
    R = 8314.0{joule_per_kelvin_per_kilomole};
    frdy = 96485.0{coulomb_per_mole};
    temp = 308.0{kelvin};
    Cm = 1.0{uF_per_cm2};
    // below commented out; base value given in cellml
    // gna = 0{nS_per_pF};
    // below from spreadsheet test
    // 'Final parms gK 0.7 gNa 1.4x gCaL 1.0x with buff scaling 1.05x beta'
    // here, gNa used from usmc_model_v3p9 , g_na = mean([0.0028 0.125]) = 0.0639
    // => 1.4x0.0639 = 0.0895
    gna = 0.0895{nS_per_pF};
    // below for test comparison with Tong, 2014 Fig 11
    // gna = 0.125{nS_per_pF};
    // below base value given in cellml
    gcal = 0.6{nS_per_pF};
    // below for test comparison with Tong, 2014 Fig 11
    // gcal = 1.5{nS_per_pF};
    ecal = 45.0{mV};
    kmca = 0.001{mM};
    gcat = 0.058{nS_per_pF};
    ecat = 42.0{mV};
    gkca = 0.8{nS_per_pF};
    gb = 0.004{nS_per_pF};
    // below default opencor val
    // gk1 = 0.52{nS_per_pF};
    // below from usmc_model_v3p9
    // 'comparison with full tong reproduce their fig 12'
    // gk1 = 0.6315{nS_per_pF};
    // below from spreadsheet test
    // 'Final parms gK 0.7 gNa 1.4x gCaL 1.0x with buff scaling 1.05x beta'
    // gk1 = 0.7{nS_per_pF};
    // below for test comparison with Tong, 2014 Fig 8
    // gk1 = 0.75{nS_per_pF};
    // below for test comparison with Tong, 2014 Fig 11
    // note overall maximum K current is about 0.8...
    gk1 = 0.7{nS_per_pF};
    // gk1 = 0.85{nS_per_pF};
    // below removed for ik2
    // gk2 = 0.032{nS_per_pF};
    gbka = 0.2{dimensionless};
    gbkab = 0.1{dimensionless};
    // below removed for ika
    // gka = 0.16{nS_per_pF};
    gcl = 0.1875{nS_per_pF};
    // below removed for ih
    // gh = 0.0542{nS_per_pF};
    gns = 0.0123{nS_per_pF};
    PnsK = 1.3{dimensionless};
    PnsNa = 0.9{dimensionless};
    PnsCa = 0.89{dimensionless};
    PnsCs = 1.0{dimensionless};
    gnsCa = 0.5{dimensionless};
    gnsNa = 1.0{dimensionless};
    gnsK = 1.19{dimensionless};
    gnsCs = 1.6{dimensionless};
    // below without inak
    PK = 1.0{dimensionless};
    PNa = 0.35{dimensionless};
    Jpmca = 0.00000035{mM_per_msec};
    Kmpmca = 0.0005{mM};
    npmca = 2{dimensionless};
    Jnaca = 0.0000035{mM_per_msec};
    Kmallo = 0.0003{mM};
    nallo = 4{dimensionless};
    ksat = 0.27{dimensionless};
    xgamma = 0.35{dimensionless};
    Kmnai = 30.0{mM};
    Kmcai = 0.007{mM};
    Kmnao = 87.5{mM};
    Kmcao = 1.3{mM};
    Fmax = 3.0{uN};
    FKm = 161.301{nM};
    Fn = 3.60205{dimensionless};
    var vFRT: dimensionless {pub: out};
    var ena: mV {pub: out};
    var ek: mV {pub: out};
    // below removed for ih
    // var eh: mV {pub: out};
    var ecl: mV {pub: out};
    var enscc: mV {pub: out};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    vFRT = v*frdy/(R*temp);
    ena = R*temp/frdy*ln(nao/nai);
    ek = R*temp/frdy*ln(ko/ki);
    // below removed for ih
    // eh = R*temp/frdy*ln((ko+PNa/PK*nao)/(ki+PNa/PK*nai));
    ecl = R*temp/frdy*ln(cli/clo);
    enscc = R*temp/frdy*ln((PnsK*ko+PnsNa*nao+4{dimensionless}*PnsCa*cao/(1.0{dimensionless}+exp(vFRT)))/(PnsK*ki+PnsNa*nai+4{dimensionless}*PnsCa*cai/(1.0{dimensionless}+exp(vFRT))));
  enddef;
  // Model - Force and w variable

  def comp Ca_dependent_Force as
    var wss: dimensionless {pub: none};
    var wtc: msec {pub: none};
    var conversion: nM_to_mM {init: 1e-6, pub: none};
    var Force: uN {pub: none};
    var w: dimensionless {init: 0.2345238135343783, pub: none};
    var time: msec {pub: in};
    var cai: mM {pub: in};
    var Fmax: uN {pub: in};
    var FKm: nM {pub: in};
    var Fn: dimensionless {pub: in};
    wss = 1.0{dimensionless}/(1.0{dimensionless}+pow(FKm*conversion/cai, Fn));
    wtc = 4000.0{msec}*(0.234845{dimensionless}+(1.0{dimensionless}-0.234845{dimensionless})/(1.0{dimensionless}+pow(cai/(FKm*conversion), Fn)));
    Force = Fmax*(w-0.2345{dimensionless});
    ode(w, time) = (wss-w)/wtc;
  enddef;
  def map between Ca_dependent_Force and environment for
    vars time and time;
  enddef;
  def map between Ca_dependent_Force and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between Ca_dependent_Force and parameters for
    vars Fmax and Fmax;
    vars FKm and FKm;
    vars Fn and Fn;
  enddef;
  // Model - currents

  def comp I_Na as
    var mss: dimensionless {pub: none};
    var hss: dimensionless {pub: none};
    // below commented out for ss-approximation
    // var mtc: msec {pub: none};
    var htc: msec {pub: none};
    // below commented out for ss-approximation
    // var m: dimensionless {init: 0.1253518889572223, pub: none};
    var h: dimensionless {init: 0.404599170710196, pub: none};
    var ina: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ena: mV {pub: in};
    var gna: nS_per_pF {pub: in};
    mss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+35.9584{mV})/9.24013{mV}));
    hss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+57.0{mV})/8.0{mV}));
    // below commented out for ss-approximation
    // mtc = 0.25{msec}+7.0{msec}/(1.0{dimensionless}+exp((v+38.0{mV})/10.0{mV}));
    htc = 0.9{msec}+1002.85{msec}/(1.0{dimensionless}+sqr((v+47.5{mV})/1.5{mV}));
    // below for ss-approximation calc
    // ina = gna*mss*mss*mss*h*(v-ena);
    // below with both m and h ss
    ina = gna*mss*mss*mss*hss*(v-ena);
    // below commented out for ss-approximation
    // ode(h, time) = (hss-h)/htc;
  enddef;
  def map between I_Na and environment for
    vars time and time;
  enddef;
  def map between I_Na and membrane_potential for
    vars v and v;
    vars ina and ina;
  enddef;
  def map between I_Na and parameters for
    vars ena and ena;
    vars gna and gna;
  enddef;
  // Model - currents

  def comp I_CaL as
    var dss: dimensionless {pub: none};
    var fss: dimensionless {pub: none};
    var fca: dimensionless {pub: none};
    // below commented out for ss approximation
    var f2tc: msec {pub: none};
    // below commented out for ss approximation
    var f2: dimensionless {init: 0.9065967263076083, pub: none};
    var ical: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ecal: mV {pub: in};
    var gcal: nS_per_pF {pub: in};
    var kmca: mM {pub: in};
    fca = 1.0{dimensionless}/(1.0{dimensionless}+pow(cai/kmca, 4.0{dimensionless}));
    dss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+22.0{mV})/7.0{mV}));
    fss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+38.0{mV})/7.0{mV}));
    // below commented out for ss approximation
    f2tc = 90.9699{msec}*(1.0{dimensionless}-1.0{dimensionless}/((1.0{dimensionless}+exp((v+13.9629{mV})/45.3782{mV}))*(1.0{dimensionless}+exp(-(v+9.49866{mV})/3.3945{mV}))));
    // below for ss-calculation
    ical = gcal*fca*dss*dss*(0.8{dimensionless}*fss+0.2{dimensionless}*f2)*(v-ecal);
    // below commented out for ss approximation
    ode(f2, time) = (fss-f2)/f2tc;
  enddef;
  def map between I_CaL and environment for
    vars time and time;
  enddef;
  def map between I_CaL and membrane_potential for
    vars v and v;
    vars ical and ical;
  enddef;
  def map between I_CaL and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_CaL and parameters for
    vars ecal and ecal;
    vars gcal and gcal;
    vars kmca and kmca;
  enddef;
  // Model - currents

  def comp I_CaT as
    var bss: dimensionless {pub: none};
    var gss: dimensionless {pub: none};
    // below commented out for ss approximation
    var icat: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ecat: mV {pub: in};
    var gcat: nS_per_pF {pub: in};
    bss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+54.23{mV})/9.88{mV}));
    gss = 0.02{dimensionless}+0.98{dimensionless}/(1.0{dimensionless}+exp((v+72.978{mV})/4.64{mV}));
    // below ss-approximation
    icat = gcat*bss*bss*gss*(v-ecat);
    // below commented out for ss approximation
  enddef;
  def map between I_CaT and environment for
    vars time and time;
  enddef;
  def map between I_CaT and membrane_potential for
    vars v and v;
    vars icat and icat;
  enddef;
  def map between I_CaT and parameters for
    vars ecat and ecat;
    vars gcat and gcat;
  enddef;
  // Model - currents

  def comp I_b as
    var ib: pA_per_pF {pub: out};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gb: nS_per_pF {pub: in};
    ib = gb*(v-ek);
  enddef;
  def map between I_b and membrane_potential for
    vars v and v;
    vars ib and ib;
  enddef;
  def map between I_b and parameters for
    vars ek and ek;
    vars gb and gb;
  enddef;
  // Model - currents

  def comp I_K1 as
    var qss: dimensionless {pub: none};
    var rss: dimensionless {pub: none};
    var qtc: msec {pub: none};
    var r1tc: msec {pub: none};
    var r2tc: msec {pub: none};
    var q: dimensionless {init: 0.2060363247740295, pub: none};
    var r1: dimensionless {init: 0.1922244113609531, pub: none};
    var r2: dimensionless {init: 0.1932803618375963, pub: none};
    var ik1: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gk1: nS_per_pF {pub: in};
    qss = 0.978613{dimensionless}/(1.0{dimensionless}+exp(-(v+18.6736{mV})/26.6606{mV}));
    rss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+63.0{mV})/6.3{mV}));
    qtc = 500.0{msec}/(1.0{dimensionless}+sqr((v+60.71{mV})/15.79{mV}));
    r1tc = 5000.0{msec}/(1.0{dimensionless}+sqr((v+62.7133{mV})/35.8611{mV}));
    r2tc = 30000.0{msec}+220000.0{msec}/(1.0{dimensionless}+exp((v+22.0{mV})/4.0{mV}));
    ik1 = gk1*q*q*(0.38{dimensionless}*r1+0.63{dimensionless}*r2)*(v-ek);
    ode(q, time) = (qss-q)/qtc;
    ode(r1, time) = (rss-r1)/r1tc;
    ode(r2, time) = (rss-r2)/r2tc;
  enddef;
  def map between I_K1 and environment for
    vars time and time;
  enddef;
  def map between I_K1 and membrane_potential for
    vars v and v;
    vars ik1 and ik1;
  enddef;
  def map between I_K1 and parameters for
    vars ek and ek;
    vars gk1 and gk1;
  enddef;
  // Model - currents
  // Model - currents
  // Model - currents

  def comp I_BKa as
    var xass_z: dimensionless {pub: none};
    var xass_vh: mV {pub: none};
    var conversion: mM_to_M {init: 1000.0, pub: none};
    var xass: dimensionless {pub: none};
    // below commented out for ss approximation
    var iBKa: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ek: mV {pub: in};
    var gkca: nS_per_pF {pub: in};
    var gbka: dimensionless {pub: in};
    var R: joule_per_kelvin_per_kilomole {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var temp: kelvin {pub: in};
    xass_z = -0.749234{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion-0.0630535{mole})/0.161942{mole}))+8.38384{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion+1538.29{mole})/739.057{mole}));
    xass_vh = 5011.47{mV}/(1.0{dimensionless}+pow((cai*conversion+0.237503{mole})/0.000239278{mole}, 0.42291{dimensionless}))-37.5137{mV};
    xass = 1.0{dimensionless}/(1.0{dimensionless}+exp(-xass_z*frdy*(v-xass_vh)/(R*temp)));
    // below for ss computation
    iBKa = gkca*gbka*xass*(v-ek);
    // below commented out for ss approximation
  enddef;
  def map between I_BKa and environment for
    vars time and time;
  enddef;
  def map between I_BKa and membrane_potential for
    vars v and v;
    vars iBKa and iBKa;
  enddef;
  def map between I_BKa and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_BKa and parameters for
    vars ek and ek;
    vars gkca and gkca;
    vars gbka and gbka;
    vars R and R;
    vars frdy and frdy;
    vars temp and temp;
  enddef;
  // Model - currents

  def comp I_BKab as
    var xabss_z: dimensionless {pub: none};
    var xabss_vh: mV {pub: none};
    var conversion: mM_to_M {init: 1000.0, pub: none};
    var xabss: dimensionless {pub: none};
    // below commented out for ss approximation
    var iBKab: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ek: mV {pub: in};
    var gkca: nS_per_pF {pub: in};
    var gbkab: dimensionless {pub: in};
    var R: joule_per_kelvin_per_kilomole {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var temp: kelvin {pub: in};
    xabss_z = -0.681249{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion-0.218988{mole})/0.428335{mole}))+1.40001{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion+228.71{mole})/684.946{mole}));
    xabss_vh = 8540.23{mV}/(1.0{dimensionless}+pow((cai*conversion+0.401189{mole})/0.00399115{mole}, 0.668054{dimensionless}))-109.275{mV};
    xabss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-xabss_z*frdy*(v-xabss_vh)/(R*temp)));
    // below for ss computation
    iBKab = gkca*gbkab*xabss*(v-ek);
    // below commented out for ss approximation
  enddef;
  def map between I_BKab and environment for
    vars time and time;
  enddef;
  def map between I_BKab and membrane_potential for
    vars v and v;
    vars iBKab and iBKab;
  enddef;
  def map between I_BKab and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_BKab and parameters for
    vars ek and ek;
    vars gkca and gkca;
    vars gbkab and gbkab;
    vars R and R;
    vars frdy and frdy;
    vars temp and temp;
  enddef;
  // Model - currents
  // Model - currents

  def comp I_Cl as
    var css: dimensionless {pub: none};
    var ctc: msec {pub: none};
    var K1cl: mM {pub: none};
    var K2cl: dimensionless {pub: none};
    var c: dimensionless {init: 0.0003764413740731269, pub: none};
    var icl: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ecl: mV {pub: in};
    var gcl: nS_per_pF {pub: in};
    var vFRT: dimensionless {pub: in};
    K1cl = 0.0006{mM}*exp(2.53{dimensionless}*vFRT);
    K2cl = 0.1{dimensionless}*exp(-5.0{dimensionless}*vFRT);
    css = 1.0{dimensionless}/(1.0{dimensionless}+K2cl*(sqr(K1cl/cai)+K1cl/cai+1.0{dimensionless}));
    ctc = -160.0{msec}+210.0{msec}/(1.0{dimensionless}+exp((v+4.56{mV})/11.62{mV}))+170.0{msec}/(1.0{dimensionless}+exp(-(v+25.5{mV})/11.62{mV}));
    icl = gcl*c*(v-ecl);
    ode(c, time) = (css-c)/ctc;
  enddef;
  def map between I_Cl and environment for
    vars time and time;
  enddef;
  def map between I_Cl and membrane_potential for
    vars v and v;
    vars icl and icl;
  enddef;
  def map between I_Cl and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_Cl and parameters for
    vars ecl and ecl;
    vars gcl and gcl;
    vars vFRT and vFRT;
  enddef;
  // Model - currents

  def comp I_ns as
    var fmg: dimensionless {pub: none};
    var gs_nao: dimensionless {pub: none};
    var gs_cao: dimensionless {pub: none};
    var gs_ko: dimensionless {pub: none};
    var tinyamount: mM {init: 1e-8, pub: none};
    var insna: pA_per_pF {pub: out};
    var insca: pA_per_pF {pub: out};
    var insk: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ko: mM {pub: in};
    var cao: mM {pub: in};
    var nao: mM {pub: in};
    var mgo: mM {pub: in};
    var enscc: mV {pub: in};
    var gns: nS_per_pF {pub: in};
    var gnsCa: dimensionless {pub: in};
    var gnsNa: dimensionless {pub: in};
    var gnsK: dimensionless {pub: in};
    fmg = 0.108043{dimensionless}+0.903902{dimensionless}/(1.0{dimensionless}+pow(mgo/0.281007{mM}, 1.29834{dimensionless}));
    gs_nao = 1{dimensionless}/0.0123{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(nao+tinyamount)));
    gs_ko = 1{dimensionless}/0.0123{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(ko+tinyamount)));
    gs_cao = 1{dimensionless}/0.000525{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(cao+tinyamount)));
    insca = fmg*gs_cao*gnsCa*gns*(v-enscc);
    insna = fmg*gs_nao*gnsNa*gns*(v-enscc);
    insk = fmg*gs_ko*gnsK*gns*(v-enscc);
  enddef;
  def map between I_ns and environment for
    vars time and time;
  enddef;
  def map between I_ns and membrane_potential for
    vars v and v;
    vars insna and insna;
    vars insca and insca;
    vars insk and insk;
  enddef;
  def map between I_ns and parameters for
    vars enscc and enscc;
    vars gns and gns;
    vars gnsNa and gnsNa;
    vars gnsCa and gnsCa;
    vars gnsK and gnsK;
    vars nao and nao;
    vars cao and cao;
    vars ko and ko;
    vars mgo and mgo;
  enddef;
  // Model - currents
  // Model - currents
  // Model - flux

  def comp J_NaCa as
    var f1naca: dimensionless {pub: none};
    var f2naca: dimensionless {pub: none};
    var fallo: dimensionless {pub: none};
    var naca_Eup: mM4 {pub: none};
    var naca_Ed1: dimensionless {pub: none};
    var naca_Ed2: mM4 {pub: none};
    var naca_Ed3: mM4 {pub: none};
    var jnaca_sign: dimensionless {init: -1, pub: none};
    var jnaca: mM_per_msec {pub: out};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var cao: mM {pub: in};
    var nao: mM {pub: in};
    var nai: mM {pub: in};
    var Jnaca: mM_per_msec {pub: in};
    var Kmallo: mM {pub: in};
    var nallo: dimensionless {pub: in};
    var ksat: dimensionless {pub: in};
    var xgamma: dimensionless {pub: in};
    var Kmnai: mM {pub: in};
    var Kmcai: mM {pub: in};
    var Kmnao: mM {pub: in};
    var Kmcao: mM {pub: in};
    var vFRT: dimensionless {pub: in};
    f1naca = exp((xgamma-1.0{dimensionless})*vFRT);
    f2naca = exp(xgamma*vFRT);
    fallo = 1.0{dimensionless}/(1.0{dimensionless}+pow(Kmallo/cai, nallo));
    naca_Eup = pow(nai, 3{dimensionless})*cao*f2naca-pow(nao, 3{dimensionless})*cai*f1naca;
    naca_Ed1 = 1.0{dimensionless}+ksat*f1naca;
    naca_Ed2 = Kmcao*pow(nai, 3{dimensionless})+pow(Kmnao, 3{dimensionless})*cai+pow(Kmnai, 3{dimensionless})*cao*(1.0{dimensionless}+cai/Kmcai);
    naca_Ed3 = cao*pow(nai, 3{dimensionless})+pow(nao, 3{dimensionless})*cai+pow(nao, 3{dimensionless})*Kmcai*(1.0{dimensionless}+pow(nai/Kmnai, 3{dimensionless}));
    jnaca = jnaca_sign*Jnaca*fallo*naca_Eup/(naca_Ed1*(naca_Ed2+naca_Ed3));
  enddef;
  def map between J_NaCa and membrane_potential for
    vars v and v;
  enddef;
  def map between J_NaCa and Ca_Concentrations for
    vars cai and cai;
    vars jnaca and jnaca;
  enddef;
  def map between J_NaCa and parameters for
    vars nao and nao;
    vars nai and nai;
    vars cao and cao;
    vars Jnaca and Jnaca;
    vars Kmallo and Kmallo;
    vars nallo and nallo;
    vars ksat and ksat;
    vars xgamma and xgamma;
    vars Kmnai and Kmnai;
    vars Kmcai and Kmcai;
    vars Kmnao and Kmnao;
    vars Kmcao and Kmcao;
    vars vFRT and vFRT;
  enddef;
  // Model - flux

  def comp J_PMCA as
    var jpmca: mM_per_msec {pub: out};
    var cai: mM {pub: in};
    var Jpmca: mM_per_msec {pub: in};
    var Kmpmca: mM {pub: in};
    var npmca: dimensionless {pub: in};
    jpmca = Jpmca/(1.0{dimensionless}+pow(Kmpmca/cai, npmca));
  enddef;
  def map between J_PMCA and Ca_Concentrations for
    vars cai and cai;
    vars jpmca and jpmca;
  enddef;
  def map between J_PMCA and parameters for
    vars Jpmca and Jpmca;
    vars Kmpmca and Kmpmca;
    vars npmca and npmca;
  enddef;
  // Model - Group

  def group as encapsulation for
    comp interface incl
      comp environment;
      comp parameters;
      comp membrane_potential;
      comp Ca_Concentrations;
      comp Ca_dependent_Force;
      comp I_Na;
      comp I_CaL;
      comp I_CaT;
      comp I_b;
      comp I_K1;
      // below removed for reduced
      // comp I_K2;
      // below removed for reduced
      // comp I_Ka;
      comp I_BKa;
      comp I_BKab;
      // below removed for reduced
      // comp I_h;
      comp I_Cl;
      comp I_ns;
      // below removed for inak
      // comp I_NaK;
      // below removed for ncx current inaca
      // comp I_NaCa;
      comp J_NaCa;
      comp J_PMCA;
    endcomp;
  enddef;
  // Model - Mapping variables
  // A computational model of the ionic currents, Ca2+ dynamics and action potentials underlying contraction of isolated uterine smooth muscle
  //
  // Wing Chiu Tong
  //
  // Newcastle University
  //
  // Model Status
  //
  // This CellML model is based on a translation of the original C code. The equations are validated using OpenCell and all units are consistent. The model can be run in both OpenCell (version 0.8) and OpenCOR (version 0.4) environments using any of the integration methods. To recreate the published results, for example figure 12 from the original paper, apply a suitable stimulating current and integrate the model for a total 10 sec with a time step of 0.02 ms.
  //
  // Model Structure
  //
  // ABSTRACT: Uterine contractions during labor are discretely regulated by rhythmic action potentials (AP) of varying duration and form that serve to determine Ca2+ -dependent force production. We have employed a computational biology approach to develop a fuller understanding of the complexity of excitation-contraction coupling of uterine smooth muscle cells (USMC). Our overall aim is to establish a mathematical platform of sufficient biophysical detail to quantitatively describe known uterine E-C coupling parameters and thereby inform future empirical investigations of physiological and pathophysiological mechanisms governing normal and dysfunctional labors. From published and unpublished data we construct mathematical models for thirteen ionic currents of USMCs: Ca2+ currents (L- and T-type), Na+ current, and hyperpolarization-activated current, three voltage-gated K+ currents, Ca2+ -activated K+ current,Ca2+ -activated Cl- current, non-specific cation current, Na+ -Ca2+ exchanger, Na+ -K+ pump and background current. The magnitudes and kinetics of each current system in a spindle shaped single cell with a specified surface area:volume ratio is described by differential equations, in terms of maximal conductances, electrochemical gradient, voltage-dependent activation/inactivation gating variables and temporal changes in intracellular Ca2+ computed from known Ca2+ fluxes. These quantifications are validated by the reconstruction of the individual experimental ionic currents obtained under voltage-clamp. Phasic contraction is modelled in relation to the time constant of changing [Ca2+ ]i . This integrated model is validated by its reconstruction of the different action potential configurations of USMCs (spikes,plateau and bursts of spikes), the change from bursting to plateau type AP produced by estradiol, and of simultaneous experimental recordings of spontaneous AP, [Ca2+ ]i and phasic force. In summary, our advanced mathematical model provides a powerful tool to investigate the physiological ionic mechanisms underlying the genesis of uterine electrical excitation-contraction coupling of labor and parturition. This will furnish the evolution of descriptive and predictive quantitative models of myometrial electrogenesis at the whole cell and tissue levels.
  //
  // The original paper reference is cited below:
  //
  // A computational model of the ionic currents, Ca2+ dynamics and action potentials underlying contraction of isolated uterine smooth muscle. Wing-Chiu Tong, Cecilia Y. Choi, Sanjay Kharche, Arun V. Holden, Henggui Zhang and Michael J. Taggart, 2011, PLoS One, 6(4), e18685. PubMed ID: 21559514 (http://www.ncbi.nlm.nih.gov/pubmed/21559514)
  //
  // cell diagram of the USMC models showing the ionic currents, pumps and exchangers within the sarcolemma
  //
  // A schematic diagram of the Tong et. al. 2011 uterine smooth muscle cell model.
enddef;
